// vim: set filetype=javascript shiftwidth=2 tabstop=2 expandtab :

macro "plnf" {
  path = getArgument;
  setBatchMode(true);
  main(path);
  //setBatchMode(false);
}

function main(PROJECT_PATH) {
  // FS = File.separator();
  FS = '/';
  run("Options...", "iterations=1 black edm=Overwrite count=1");

  AUTO = true;
  if (PROJECT_PATH == "") {
    PROJECT_PATH = getDirectory("Choose a Directory");
    AUTO = false;
  }
  PROJECT_NAME = File.getName(PROJECT_PATH);

  POSITION_STRING = "[A-Z][0-9]+[a-z]?";
  POSITION_DIRS = getMatchingDirs(PROJECT_PATH,POSITION_STRING);

  RESULTS_PATH = PROJECT_PATH+"results"+FS;
  File.makeDirectory(RESULTS_PATH);

  COMPILED_DATA_PATH = RESULTS_PATH+"compiled"+FS;

  WIDTH = HEIGHT = CHANNELS = SLICES = FRAMES = 0;



  SIZE = "1-200";
  CIRC = "0.50-1.0";
  RADIUS = 50;
  FM_TOLERANCE = 10;
  AREA_THRESH = 20;
  SD_AREA_THRESH = 130;
  SD_ABOVE_BG = 1;

  if (!AUTO) {
    Dialog.create("Set Parameters");
    Dialog.addMessage("Brightfield Parameters");
    Dialog.addString("  Size (pixels^2):", SIZE, 10);
    Dialog.addString("  Circularity:", CIRC, 10);
    Dialog.addNumber("  Rolling ball radius:", RADIUS);
    Dialog.addNumber("  Find Maxima Tolerance:", FM_TOLERANCE);

    Dialog.addMessage("Determines which selections are false positives");
    Dialog.addNumber("  Area Threshold (pixels^2):",AREA_THRESH);
    Dialog.addNumber("  SD/Area Threshold:",SD_AREA_THRESH);

    Dialog.addMessage("Filter settings");
    Dialog.addMessage("Brightfield is WL0");
    Dialog.addNumber("  YFP: WL",1);
    Dialog.addNumber("  RFP: WL",2);
    Dialog.addNumber("  CFP: WL",3);
    Dialog.addNumber("  TO-PRO: WL",4);

    Dialog.addMessage("Filter translations relative to brightfield.\nOrigin is top left corner of image.\nEnter as x,y.");
    Dialog.addString("YFP:","0,0");
    Dialog.addString("RFP:","0,0");
    Dialog.addString("CFP:","0,0");
    Dialog.addString("TO-PRO:","0,0");


    Dialog.addMessage("To determine cell counts in each channel");
    Dialog.addNumber("Standard deviations above background:",SD_ABOVE_BG);

    Dialog.show();
    // Brightfield
    SIZE = Dialog.getString();
    CIRC = Dialog.getString();
    RADIUS = Dialog.getNumber();
    FM_TOLERANCE = Dialog.getNumber();

    // Threshold
    AREA_THRESH = Dialog.getNumber();
    SD_AREA_THRESH = Dialog.getNumber();

    // Filter settings
    trans = newArray(5);
    BF = 0;
    YFP = Dialog.getNumber();
    RFP = Dialog.getNumber();
    CFP = Dialog.getNumber();
    TP  = Dialog.getNumber();

    // Translations
    yfpt = Dialog.getString();
    rfpt = Dialog.getString();
    cfpt = Dialog.getString();
    tpt  = Dialog.getString();

    SD_ABOVE_BG = Dialog.getNumber();
  }


  trans[YFP] = yfpt;
  trans[RFP] = rfpt;
  trans[CFP] = cfpt;
  trans[TP]  = tpt;

  MAX_TRANS = getMaxTranslation(trans);

  position_names = newArray(POSITION_DIRS.length);
  wl_names = newArray(20);
  for (i=0;i<wl_names.length;i++) wl_names[i] = "";

  COUNT_ARRAY = newArray(POSITION_DIRS.length*wl_names.length+1);
  REJECT_ARRAY = newArray(POSITION_DIRS.length);
  IND_COUNT_ARRAY = newArray(POSITION_DIRS.length*(wl_names.length-1));
  count = 0;
  ind_count = 0;
  wls = 0;

  path_to_counts = RESULTS_PATH+PROJECT_NAME+"_"+SD_ABOVE_BG+"sd_counts.txt";

  path_to_stack_lists = PROJECT_PATH+PROJECT_NAME+"_stacks"+FS;
  File.makeDirectory(path_to_stack_lists);
  drawing_paths = newArray(POSITION_DIRS.length);

  path_to_drawing_list = path_to_stack_lists+"drawn_selections.txt";
  path_to_skip_list = path_to_stack_lists+"skip.txt";

  skip_array = newArray(0);
  if (File.exists(path_to_skip_list)) {
    skip_array = split(File.openAsString(path_to_skip_list),"\n");
  }

  for (z=0;z<POSITION_DIRS.length;z++) {
    position_name = replace(POSITION_DIRS[z],FS,"");

    well     = substring(position_name,0,lengthOf(position_name)-1);
    position = substring(position_name,lengthOf(position_name)-1);

    print("Processing "+position_name+"...");
    position_names[z] = position_name;
    position_path = PROJECT_PATH+POSITION_DIRS[z];
    position_data_path = RESULTS_PATH+position_name+"_data"+FS;

    wl_string = "WL[0-9]+";
    wl_dirs = getMatchingDirs(position_path,wl_string);

    // 'Compiled' folder only relevant if fluorescent images are
    // going to be used.
    if (z==0) {
      for (i=0;i<wl_dirs.length;i++) {
        //print(wl_dirs[i]);
        if (!endsWith(wl_dirs[i],"0/")) {
          File.makeDirectory(COMPILED_DATA_PATH);
        }
      }
    }

    var x_pos, y_pos, areas, ints;
    final_bf_counts = 0;
    for (j=0;j<wl_dirs.length;j++) {
      wl_name = replace(wl_dirs[j],FS,"");

      print("  "+wl_name+"...");

      if (z == 0) {
        wl_names[j] = wl_name;
        wls++;
      }

      wl_path = position_path+wl_dirs[j];
      File.makeDirectory(position_data_path);


      image = getImage(wl_path);
      path_to_image = wl_path+image;
      image_name = replace(image,'.tif',"");

      skip = 0;
      for (q=0;q<skip_array.length;q++) {
        if ( matches(File.getName(skip_array[q]), File.getName(path_to_image)) ) {
          skip = 1;
        }
      }

      if (skip == 0) {
        open(path_to_image);
        getDimensions(WIDTH,HEIGHT,CHANNELS,SLICES,FRAMES);
        original_image_id = getImageID();

        run("Set Measurements...", "redirect=None decimal=3");
        run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel global");

        // Paths images.
        path_to_flat    = position_data_path+position_name+"_flat.tif";
        path_to_bg_sub  = position_data_path+position_name+"_bg_sub.png";
        path_to_bg_mask = position_data_path+position_name+"_bg_mask.png";
        path_to_drawing = position_data_path+position_name+"_selection_image.png";
        path_to_cor_fluor = position_data_path+position_name+"_"+wl_name+"_corrected.tif";

        // Paths selections.
        path_to_bg_selection       = position_data_path+position_name+"_"+wl_name+"_bg_selection.zip";
        path_to_initial_selections = position_data_path+position_name+"_initial_selections.zip";
        path_to_final_selections   = position_data_path+position_name+"_final_selections.zip";
        path_to_vor_selections     = position_data_path+position_name+"_voronoi_selections.zip";
        path_to_adj_selections     = position_data_path+position_name+"_"+wl_name+"_adj_selections.zip";
        path_to_ind_selections     = position_data_path+position_name+"_"+wl_name+"_ind_selections.zip";

        // Path to data files
        path_to_data = position_data_path+position_name+"_"+wl_name+"_"+SD_ABOVE_BG+"sd_data.txt";

        File.makeDirectory(position_data_path);
        path_to_compiled = COMPILED_DATA_PATH+position_name+"_"+SD_ABOVE_BG+"sd_compiled.txt";



        roiManager("Reset");

        if ( matches(wl_name, 'WL0') ) {
          bg_sub_id = flatten(original_image_id);
          selectImage(bg_sub_id);
          run("Enhance Contrast", "saturated=0.5 normalize");
          run("16-bit");
          save(path_to_flat);

          makeBgMask(bg_sub_id,path_to_bg_selection);
          removeBackground(bg_sub_id,path_to_bg_selection,path_to_bg_sub);
          makeSelections(bg_sub_id,path_to_initial_selections);
          selectImage(bg_sub_id);
          close();

          n_orig_sels = 0;
          if (File.exists(path_to_initial_selections)) {
            roiManager("open",path_to_initial_selections);
            n_orig_sels = roiManager("count");
            open(path_to_flat);
            flat_id = getImageID();
            run("16-bit");

            // Weed out artifacts by making a list of selections with low SD/area.
            // Also gets rid of selections that will be translated out of the area of the
            // image.
            artifact_array = findArtifacts(n_orig_sels,MAX_TRANS);
            deleteSelections(artifact_array,n_orig_sels);
            roiManager("Deselect");

            f = File.open(path_to_data);

            selectImage(flat_id);
            final_bf_counts = roiManager("count");
            rejected_selections = n_orig_sels-final_bf_counts;
            x_pos = newArray(final_bf_counts);
            y_pos = newArray(final_bf_counts);
            areas = newArray(final_bf_counts);
            ints  = newArray(final_bf_counts*4);
            COUNT_ARRAY[count++]  = final_bf_counts;
            REJECT_ARRAY[z] = rejected_selections;
            print(f, "'Find Maxima' Threshold\t"+FM_TOLERANCE);
            print(f, "SD/Area threshold\t"+SD_AREA_THRESH);
            print(f, "Total counts\t"+final_bf_counts);
            print(f, "Deleted\t"+rejected_selections+"\t("+100*final_bf_counts/n_orig_sels+"%)");
            print(f, "\n");
            print(f, "selection\tx\ty\tarea\tmean\tsd\tmax\twavelength\twell\tposition");
            for (i=0;i<final_bf_counts;i++) {
              sel = d2s(i+1,0);
              roiManager("select",i);
              roiManager("Rename",sel);
              List.setMeasurements;
              area = List.getValue("Area");
              mean = List.getValue("Mean");
              x    = List.getValue("X");
              y    = List.getValue("Y");
              sd   = List.getValue("StdDev");
              max  = List.getValue("Max");

              x_pos[i] = x;
              y_pos[i] = y;
              areas[i] = area;

              print(f, sel+"\t"+x+"\t"+y+"\t"+area+"\t"+mean+"\t"+sd+"\t"+max+"\t"+wl_name+"\t"+well+"\t"+position);
            }
            run("Select None");
            File.close(f);
            roiManager("Save", path_to_final_selections);
            roiManager("Deselect");
            roiManager("Reset");


            drawSelections(flat_id,path_to_initial_selections,path_to_final_selections,path_to_drawing);
            drawing_paths[z] = path_to_drawing;

            selectImage(flat_id);
            close();

            // Make expanded selections for fluorescence images based on Voronoi segmentation.
            //vorSelection(path_to_final_selections,path_to_bg_sub,position_data_path,path_to_vor_selections);
          } else { final_bf_counts = 0; }
          // end of WL0 'if' 
        } else if ( final_bf_counts != 0 ) {

          selectImage(original_image_id);
          translation = split(trans[parseInt(substring(wl_name,lengthOf(wl_name)-1))],',');
          adjustSelections(translation,path_to_final_selections,path_to_adj_selections);


          //setBatchMode(false);
          // Get uncorrected intensity values
          raw_ints = newArray(final_bf_counts);
          roiManager("Open", path_to_adj_selections);
          for (i=0;i<final_bf_counts;i++) {
            sel = i+1;
            roiManager("select",i);
            List.setMeasurements;
            raw_ints[i] = List.getValue("IntDen");
          }
          roiManager("reset");
          run("Select None");

          // Determine background of unmanipulated image.
          makeBgMask(original_image_id,path_to_bg_selection);
          orig_bg = getBg(original_image_id,path_to_bg_selection);

          // Do rolling ball background subtraction to even out image background.
          selectImage(original_image_id);
          rad = 20;
          run("Subtract Background...", "rolling="+rad);
          rename("rb_sub");

          // Determine background mean and sd.
          makeBgMask(original_image_id,path_to_bg_selection);
          bg = getBg(original_image_id,path_to_bg_selection);
          flat_thresh = round(SD_ABOVE_BG*bg[1]);

          // Remove single pixels different from their neighbors by
          // the indicated number of sd (i.e., "hot" CCD pixels)
          run("Remove Outliers...","radius=1 threshold="+round(2*orig_bg[1])+" which=Bright");

          // Get selections independent of brightfield selections.
          getIndSels(original_image_id,path_to_bg_selection,path_to_ind_selections);
          // Subtract background from image. Any pixels less than the background will be set to zero.
          newImage("bg", "16-bit White", WIDTH, HEIGHT, SLICES);
          bg_id = getImageID();
          setColor(flat_thresh);
          fillRect(0,0,WIDTH,HEIGHT);
          imageCalculator("Subtract", original_image_id, bg_id);
          selectImage(bg_id);
          close();
          selectImage(original_image_id);
          save(path_to_cor_fluor);

          // Get counts from independent selections not based on bright field.
          ind_counts = 0;
          if (File.exists(path_to_ind_selections)) {
            roiManager("open", path_to_ind_selections);
            ind_sels = roiManager("count");
            for (i=0;i<ind_sels;i++) {
              roiManager("select",i);
              List.setMeasurements;
              intden = List.getValue("IntDen");
              area   = List.getValue("Area");
              med    = List.getValue("Median");
              if (med == 0) intden = 0;
              if (intden > 0 && area > AREA_THRESH) ind_counts++;
            }
          }
          IND_COUNT_ARRAY[ind_count++] = ind_counts;
          roiManager("Reset");
          run("Select None");

          // Step through each selection on the 16-bit image and get corrected intensities.
          roiManager("Open", path_to_adj_selections);
          wl_counts = 0;
          f = File.open(path_to_data);
          print(f, "Background");
          print(f, "mean\tsd");
          print(f, bg[0]+"\t"+bg[1]);
          print(f, "sd threshold\t"+SD_ABOVE_BG);
          print(f,"selection\tx\ty\tarea\ttot_int\tcor_int\twavelength\twell\tposition");
          for (i=0;i<final_bf_counts;i++) {
            sel = i+1;
            roiManager("select",i);
            List.setMeasurements;
            intden = List.getValue("IntDen");
            med    = List.getValue("Median");

            if (intden > 0 && areas[i] > AREA_THRESH) wl_counts++;

            ints[i+(final_bf_counts*(j-1))] = intden;

            print(f, sel+"\t"+x_pos[i]+"\t"+y_pos[i]+"\t"+areas[i]+"\t"+raw_ints[i]+"\t"+intden+"\t"+wl_name+"\t"+well+"\t"+position);
          }

          COUNT_ARRAY[count++] = wl_counts;
          File.close(f);
          selectImage(original_image_id);
          close();

        } // end of other wavelengths
        if (wls > 1) {
          wl_name_string="";
          for (t=1;t<wls;t++) {
            if (t == wls-1) {
              wl_name_string = wl_name_string + wl_names[t];
            } else {
              wl_name_string = wl_name_string + wl_names[t] + "\t";
            }
          }

          f = File.open(path_to_compiled);
          print(f, "selection\tx\ty\tarea\t"+wl_name_string);
          sel=0;
          for (t=0;t<final_bf_counts;t++) {
            data_string = d2s(sel+1,0)+"\t"+x_pos[t]+"\t"+y_pos[t]+"\t"+areas[t];
            for (u=0; u<wls-1; u++) {
              data_string = data_string+"\t"+d2s(ints[u*final_bf_counts+sel],9);
            }
            print(f, data_string);
            sel++;
          }
          File.close(f);
        }
      } else { print("Skipping "+position_name+", "+wl_name); }
    } // end of wavelength block
    print("Done");
  } // end of position block

  // Write lists of paths to images for easy stack opening.
  f = File.open(path_to_drawing_list);
  for (i=0;i<drawing_paths.length;i++) {
    print(f, drawing_paths[i]);
  }
  File.close(f);

  // Write the counts report
  wl_name_string = "position\trejected\t";
  for (i=0;i<wls;i++) {
    wl_name_string = wl_name_string + wl_names[i] + "\t";
  } 
  wl_name_string = wl_name_string + "untagged\t";
  for (i=1;i<wls;i++) {
    wl_name_string = wl_name_string + "ind_"+wl_names[i] + "\t";
  } 

  f = File.open(path_to_counts);
  print(f, wl_name_string);

  for (i=0;i<position_names.length;i++) {
    count_string = "";
    count_string = count_string+position_names[i]+"\t"+REJECT_ARRAY[i]+"\t";
    position_total = 0;
    bf_counts = 0;
    for (j=0;j<wls;j++) {
      wl_counts = COUNT_ARRAY[(wls*i)+j];
      count_string = count_string+wl_counts+"\t";
      position_total += wl_counts;

      if (j==0) bf_counts = wl_counts;

      if (j==wls-1)
        count_string = count_string + d2s(2*bf_counts-position_total,0)+"\t";
    }
    for (j=0;j<(wls-1);j++) {
      ind_counts = IND_COUNT_ARRAY[(wls-1)*i+j];
      count_string = count_string + ind_counts+"\t";
    }
    // Untagged cells.
    print(f, count_string);
  }
  File.close(f);
}

function getMaxTranslation(tr) {
  maxs = newArray(0,0);
  for (i=0;i<tr.length;i++) {
    if (tr[i] != 0) {
      ns = split(tr[i],',');
      if (ns[0] > maxs[0]) maxs[0] = ns[0];
      if (ns[1] > maxs[1]) maxs[1] = ns[1];
    }
  }
  return maxs;
}

function adjustSelections(d, selpath, savepath) {
  roiManager("Reset");
  roiManager("Open", selpath);
  n = roiManager("Count");
  for (i=0;i<n;i++) {
    roiManager("Select",i);
    roiManager("Rename",i+1);
    getSelectionBounds(x,y,w,h);
    setSelectionLocation(x+d[0],y+d[1]);
    roiManager("Update");
  }
  run("Select None");
  roiManager("Save", savepath);
  roiManager("Reset");
}

function makeBgMask(id,savepath) {
  selectImage(id);
  run("Duplicate...", "title=me.tif");
  me_id = getImageID();

  run("8-bit");
  run("Gaussian Blur...", "sigma=1");
  run("Variance...", "radius=3");
  run("Duplicate...", "title=re");
  re_id = getImageID();

  selectImage(me_id);
  setAutoThreshold("MaxEntropy dark");
  run("Convert to Mask");
  run("Fill Holes");
  run("Create Selection");
  List.setMeasurements;
  me_area = List.getValue("Area");

  selectImage(re_id);
  setAutoThreshold("RenyiEntropy dark");
  run("Convert to Mask");
  run("Fill Holes");
  run("Create Selection");
  List.setMeasurements;
  re_area = List.getValue("Area");

  if (re_area >= me_area) {
    selectImage(re_id);
    close();
  } else {
    selectImage(me_id);
    close();
  }

  if (!is("Batch Mode")) wait(500);
  roiManager("Add");
  close();

  selectImage(id);
  roiManager("Select",0);

  roiManager("Rename", "bg_mask");
  roiManager("Save", savepath);
  run("Select None");
  roiManager("Reset");
}

function getFluorBackground(id,savepath) {
  selectImage(id);
  newImage("bg_mask", "8-bit White", WIDTH, HEIGHT, SLICES);
  fbg_id = getImageID();
  setForegroundColor(0,0,0);

  roiManager("Deselect");
  roiManager("Fill");
  for (i=0;i<5;i++) run("Dilate");
  roiManager("reset");
  run("Create Selection");
  run("Make Inverse");

  roiManager("Add");
  roiManager("Save", savepath);
  selectImage(fbg_id);
  close();

  selectImage(id);

  // Assumes first selection is background mask.
  roiManager("select",0);
  List.setMeasurements;
  mean = List.getValue("Mean");
  sd   = List.getValue("StdDev");
  data = newArray(mean,sd);
  run("Select None");
  roiManager("reset");

  return data;
}

function vorSelection(ptfs,bg_sub_path,data_path,savepath) {
  newImage("voronoi", "8-bit white", WIDTH, HEIGHT, SLICES);
  seg = getImageID();
  seg_title = getTitle();
  setForegroundColor(0,0,0);
  roiManager("Open",ptfs);
  roiManager("Fill");
  run("Dilate");

  open(bg_sub_path);
  run("Find Maxima...", "noise="+FM_TOLERANCE+" output=[Single Points]");
  vor = getImageID();
  vor_title = getTitle();
  run("Voronoi");
  setMinAndMax(0,1);
  run("Apply LUT");
  run("Invert");
  //save(data_path+image_name+"_voronoi_mask.png");

  imageCalculator("Subtract create", vor_title, seg_title);
  sel_mask = getImageID();
  run("Make Binary");
  //save(data_path+image_name+"_voronoi_selection_mask.png");

  roiManager("Reset");
  run("Analyze Particles...", "size="+SIZE+" circularity="+CIRC+" show=Nothing clear add");
  print("vor: "+roiManager("count"));
  roiManager("Save",savepath);

  selectImage(seg);
  close();
  selectImage(vor);
  close();
}

function drawSelections(id,ptis,ptfs,savepath) {
  selectImage(id);
  run("Duplicate...", "title=drawing");
  run("RGB Color");

  roiManager("Open", ptis);
  setForegroundColor(255,0,0);
  roiManager("Draw");
  roiManager("Reset");
  roiManager("Open", ptfs);
  setForegroundColor(0,255,0);
  roiManager("Draw");
  save(savepath);
  close();
}

function makeSelections(id,savepath) {
  roiManager("reset");
  selectImage(id);

  run("Find Maxima...", "noise="+FM_TOLERANCE+" output=[Segmented Particles]");
  run("Select All");
  List.setMeasurements;
  mode = List.getValue("Mode");
  if (mode == 255) {
    run("Invert");
  }

  run("Analyze Particles...", "size="+SIZE+" circularity="+CIRC+" show=Nothing clear add");
  if (roiManager("count") != 0)
    roiManager("Save", savepath);
  roiManager("reset");
  close();
}

function getImage(path) {
  contents = getFileList(path);
  tifs = 0;
  tif_name = "";
  for (i=0;i<contents.length;i++) {
    if ( matches(contents[i], '.*\.tif') ) {
      tif_name = contents[i];
      tifs++;
    }
  }
  if (tifs > 1) exit("Too many images in folder '"+path+"'.");
  if (tifs == 0) exit("No tifs in folder '"+path+"'.");
  return tif_name;
}

function getMatchingDirs(path,match) {
  contents = getFileList(path);
  n = 0;
  names = newArray(contents.length);
  for (i=0;i<contents.length;i++) {
    if ( matches(replace(contents[i],FS,""), match) ) {
      //print("Matched "+contents[i]);
      names[i] = contents[i];
      n++;
    }
  }

  if (n == 0) exit("Didn't find any matches to "+match+" in "+path);

  good_dirs = newArray(n);
  gdi = 0;
  for (i=0;i<names.length;i++) {
    if ( matches(replace(names[i],FS,""), match) ) {
      //print("Copying "+ names[i]);
      good_dirs[gdi++] = names[i];
    }
  }
  return good_dirs;
}


function findArtifacts(n,max_trans) {
  arti = newArray(n);
  for (i=0;i<n;i++) {
    roiManager("select",i);
    List.setMeasurements;
    x     = List.getValue("X");
    y     = List.getValue("Y");
    area  = List.getValue("Area");
    stdev = List.getValue("StdDev");
    if (stdev/area <= SD_AREA_THRESH || area < AREA_THRESH || x+max_trans[0] > WIDTH-1 || y+max_trans[1] > HEIGHT-1) {
      //print("Marking "+(i+1)+" for deletion.");
      arti[i] = i;
    } else {
      arti[i] = 0;
    }
  }
  return arti;
}

function deleteSelections(arr, n) {
  for (i=0;i<n;i++) {
    if (arr[i] != 0) {
      roiManager("select", arr[i]);
      roiManager("Delete");
      //print("Deleting "+(i+1));
      for (j=i;j<arr.length;j++) {
        if (arr[j] > 0) {
          arr[j]--;
        }
      }
    }
  }
}

function removeBackground(id,bgpath,savepath) {
  selectImage(id);

  run("8-bit");
  setForegroundColor(255,255,255);
  roiManager("open",bgpath);
  roiManager("Select", 0);
  
  // Lowest SD will be the background selection.
  List.setMeasurements;
  sd = List.getValue("StdDev");
  run("Make Inverse");
  List.setMeasurements;
  isd = List.getValue("StdDev");
  //print("sd="+sd+", isd="+isd);

  if (sd < isd) {
    //print("sd="+sd+", isd="+isd);
    //print("Inverting");
    run("Make Inverse");
  } else if (sd == isd) { 
    exit("SD of mask and its inverse are identical!");
  }

  List.setMeasurements;
  mean_bg = round(List.getValue("Mean"));
  run("Fill");
  run("Select None");
  setMinAndMax(0,mean_bg);
  run("Apply LUT");
  run("Gaussian Blur...", "sigma=0.5");
  save(savepath);
  roiManager("reset");
}

function flatten(id) {

  selectImage(id);
  run("Duplicate...", "title=bg");
  bg_id = getImageID();

  run("Select None");
  run("Gaussian Blur...", "sigma=10");
  run("Subtract Background...", "rolling="+RADIUS+" light create");

  imageCalculator("Subtract create 32-bit", id, bg_id);
  rename(image_name+"_flat.tif");
  f_id = getImageID();

  selectImage(bg_id);
  close();
  selectImage(id);
  close();
  return f_id;
}


function printa(arr) {
  for (i=0;i<arr.length;i++) {
    print(arr[i]);
  }
}

function getIndSels(orig_id,selpath,savepath) {
  run("Duplicate...", "title=manip");
  manip = getImageID();

  run("8-bit");
  
  manip_bg = getBg(manip,selpath);
  orig_bg = getBg(orig_id,selpath);

  // Clean up 8-bit version of image for segmentation.
  selectImage(manip);
  run("Despeckle");
  setMinAndMax((manip_bg[0]+SD_ABOVE_BG*manip_bg[1]),255);
  run("Apply LUT");
  //save(data_dir+FS+folder_name+"-manipulated_8-bit.tif");

  run("Find Maxima...", "noise=1 output=[Segmented Particles]");
  run("Watershed");
  List.setMeasurements;
  mode = List.getValue("Mode");
  if (mode == 0) run("Invert");
  run("Remove Outliers...", "radius=1 threshold=1 which=Dark");
  //rename(folder_name+"_cell_mask");
  //save(data_dir+FS+"cell_mask.png");
  cell_mask = getImageID();


  roiManager("Reset");
  run("Analyze Particles...", "size=0-Infinity circularity=0-1 show=Nothing clear add");
  if (roiManager("count") != 0) roiManager("Save", savepath);

  selectImage(cell_mask);
  close();

  selectImage(manip);
  close();
  roiManager("reset");
  run("Select None");
}

function getBg(id,mask) {
  roiManager("reset");
  selectImage(id);
  

  roiManager("open",mask);
  roiManager("select",0);
  List.setMeasurements;
  mean = List.getValue("Mean");
  sd   = List.getValue("StdDev");

  run("Select None");
  bg = newArray(mean,sd);
  return bg;
}
